OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x8c1fc55b = 1.0
0x9f5c4075 = Power Spectrum example
0xf6b2e3fa = box-tutorials
0xf8034a49 = Inria
Comment
  The Acquisition client box
  reads CSV file containing signals.
Comment
  The CSV File Reader box
  reads CSV file containing signals.
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Each channel is referenced against
  channel Nz (which was recorded on the nose
  in the demonstrated file) thanks to the
  Reference Channel box.
Comment
  The Signal Display
  box is just present to
  monitor the input of
  the spectrum
  computation pipeline.

  The Window Manager
  is used to organize the
  two windows correctly !
Comment
  Then the Temporal Filter box
  filters the signal in the [1 40] Hz range.
Comment
  Viz AF8 signal channel
Comment
  The Time Based Epoching box
  splits the signals in blocks of 1 seconds every
  16th of second. This is a moving window.
Comment
  An FFT is applied on each window thanks to the
  Spectral Analysis box.
Comment
  12-20 Hz
Comment
  Finally, the Power Spectrum Display
  displays the resulting spectrum.
Comment
  Viz Alpha power
Comment
  Viz Beta power
Comment
  Write it to TCP/IP 5679 port

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Identity => #1
Input stream=#1 -> CSV File Writer
  Filename = recordTEST-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false
#1 -> Temporal filter => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 40.000000
  Pass band ripple (dB) = 0.500000
-> Channel Selector "AF8" => #4
  Channel List = AF8
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Spectral analysis => #6
  Amplitude = true
  Phase = true
  Real Part = false
  Imaginary Part = false
#6.Amplitude -> 8-12 (Alpha) Frequency
  Frequencies to select = 8:12;
-> Spectrum Average
  Considers zeros = false
-> Matrix Display "Alpha AF8"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#6.Amplitude -> 12-20 (beta) freq
  Frequencies to select = 12:20
-> Spectrum Average
  Considers zeros = false
-> Matrix Display "Beta AF8"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#4 -> Signal display "AF8 Signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#3 -> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Spectral analysis => #15
  Amplitude = true
  Phase = true
  Real Part = false
  Imaginary Part = false
#15.Amplitude -> Frequency Band Selector
  Frequencies to select = 12:20
-> Spectrum Average => #17
  Considers zeros = false
-> Beta Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#17 -> TCP Writer
  Port = 5679
  Output format = Raw
#15.Amplitude -> All Power spectrum display
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = true
  Gain = 0.001
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
Data=#3 -> All Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

0x341d3912 CSV File Reader
  Filename = D:/data/test/recordTEST-[2019.10.11-20.55.26].csv
